//Prompt user to open video file and then the CSV file
showMessage("Please first select the video you wish to process and then open the corresponding CSV with the tracking information.");

//Open the video file
videoFile = File.openDialog("Choose your video file");
videoFileSplit = split(videoFile,"/")
videoFileName = videoFileSplit[videoFileSplit.length-1];
open(videoFile)

// ----------------------------------------------------------------------------------------

//Open CSV as string
file = File.openDialog("Select the CSV file corresponding to the video");
fileSplit = split(file,"/");
fileName = fileSplit[fileSplit.length-1];
folder = String.join(Array.deleteValue(fileSplit,fileName), "/");
x = File.openAsString("/"+folder+"/"+fileName);

//Get File List
fileList = getFileList(folder);

//Separate file into rows
rows = split(x,"\n");

//Find row with the Header Names
rowNames = rows[0];
rowName = split(rowNames,",");

//Get X and Y location of the Track at each point
posX = newArray();
posY = newArray();
for(i=1;i<rows.length; i++){
	rowDataPoints = split(rows[i],",");
	posX = Array.concat(posX,rowDataPoints[2]);
	posY = Array.concat(posY,rowDataPoints[3]);
}

//Define Width and Height of the crop
cropWidth = 120;
cropHeight = 120;
y_centering = 0.45; // How far up the video the MTB is centered (0.5 = centered)

// ----------------------------------------------------------------------------------------

//Find number of slices
selectImage(videoFileName);
run("Select None");
slices = nSlices();

// Cycle through each slice and determine crop space
//imageName = getInfo("image.title");
//imageNameSplit = split(imageName,"-");
//imageNameBase = String.join(Array.deleteValue(imageNameSplit,imageNameSplit[imageNameSplit.length-1]), "-");
cropThreshold = parseInt(posY[0]) + 1;
substacks = newArray();
crop_points = newArray();
for(k=1;k<slices+1;k++){
	if(parseFloat(posY[k-1]) < parseFloat(cropThreshold)){
//		print("Threshold reached...");
//		print("Slice: "+ (k-1));
//		print("Y Position: " + posY[k-1]);
//		print("Crop Threshold: " + cropThreshold);
//		print("--------------------------------");
//		makeRectangle(posX[k-1]-(cropWidth/2), posY[k-1]-(cropHeight*(1-y_centering)), cropWidth, cropHeight);
		crop_points = Array.concat(crop_points, newArray(parseFloat(posX[k-1])-(cropWidth/2), parseFloat(posY[k-1])-(cropHeight*(1-y_centering))));
		cropThreshold = parseInt(posY[k-1]) - 19; // 19 pixels = 2 microns
		substacks = Array.concat(substacks,k);
	}
}

//Add the last frame to the substacks array if not already added.
if(substacks[substacks.length-1] != k-1){
	substacks = Array.concat(substacks,k-1);
}


//Split stack to substacks depending on the crop field of view
for(j=1;j<substacks.length;j++){
	selectImage(videoFileName);
	run("Make Substack...", "slices="+substacks[j-1]+"-"+substacks[j]);
	makeRectangle(crop_points[(j-1)*2], crop_points[(j-1)*2+1], cropWidth, cropHeight);
	run("Crop");
}

//Close original file
selectImage(videoFileName);
close();

showMessageWithCancel("Press OK if you would like to save these videos as an AVI in a folder.");
folder = getDirectory("Select a directory to save your videos.");
for(j=1;j<substacks.length;j++){
	selectImage("Substack ("+substacks[j-1]+"-"+substacks[j]+")");
	run("AVI... ", "compression=JPEG frame=25 save=["+folder+"/"+videoFileName+" Substack ("+substacks[j-1]+"-"+substacks[j]+").avi]");
	close();
}




